PsychoPy2experiment version="2025.1.1"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001', 'age': '', 'gender': "['Male', 'Female']", 'education_years': '', 'handedness': "['Right', 'Left']"}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1536, 960]
  expName = gender_task
  keyboardBackend = PsychToolbox
  runMode = 0
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Routines
  Routine trial
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    ImageComponent image
      image [set every repeat] = $ImageFile
      size = (0.5, 0.5)
      startVal [time (s)] = 0.5
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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    KeyboardComponent key_resp
      allowedKeys = 'f', 'm'
      correctAns = $CorrectAns
      forceEndRoutine = True
      startVal [time (s)] = 0.5
      storeCorrect = True
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  Routine Instructions
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    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        You are about to see a series of human faces on the screen. Your task is to decide the gender of the person, IGNORING the facial expression (angry, happy, or neutral).

        If the person you see is FEMALE, press the F key. If the person you see is MALE, press the M key.

        Please try to respond as quickly and accurately as possible. Press the spacebar to begin when you are ready.
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine Instructions
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = conditions.xlsx
    loopType = random
    nReps = 1
    random seed = 42
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    conditions:
      [{'ImageFile': 'stimuli/F15AN.jpg', 'Gender': 'Female', 'Emotion': 'Angry', 'CorrectAns': 'f'},
      {'ImageFile': 'stimuli/F15HA.jpg', 'Gender': 'Female', 'Emotion': 'Happy', 'CorrectAns': 'f'},
      {'ImageFile': 'stimuli/F15NE.jpg', 'Gender': 'Female', 'Emotion': 'Neutral', 'CorrectAns': 'f'},
      {'ImageFile': 'stimuli/F16AN.jpg', 'Gender': 'Female', 'Emotion': 'Angry', 'CorrectAns': 'f'},
      {'ImageFile': 'stimuli/F16HA.jpg', 'Gender': 'Female', 'Emotion': 'Happy', 'CorrectAns': 'f'},
      {'ImageFile': 'stimuli/F16NE.jpg', 'Gender': 'Female', 'Emotion': 'Neutral', 'CorrectAns': 'f'},
      {'ImageFile': 'stimuli/F17AN.jpg', 'Gender': 'Female', 'Emotion': 'Angry', 'CorrectAns': 'f'},
      {'ImageFile': 'stimuli/F17HA.jpg', 'Gender': 'Female', 'Emotion': 'Happy', 'CorrectAns': 'f'},
      {'ImageFile': 'stimuli/F17NE.jpg', 'Gender': 'Female', 'Emotion': 'Neutral', 'CorrectAns': 'f'},
      {'ImageFile': 'stimuli/F18AN.jpg', 'Gender': 'Female', 'Emotion': 'Angry', 'CorrectAns': 'f'},
      {'ImageFile': 'stimuli/F18HA.jpg', 'Gender': 'Female', 'Emotion': 'Happy', 'CorrectAns': 'f'},
      {'ImageFile': 'stimuli/F18NE.jpg', 'Gender': 'Female', 'Emotion': 'Neutral', 'CorrectAns': 'f'},
      {'ImageFile': 'stimuli/F19AN.jpg', 'Gender': 'Female', 'Emotion': 'Angry', 'CorrectAns': 'f'},
      {'ImageFile': 'stimuli/F19HA.jpg', 'Gender': 'Female', 'Emotion': 'Happy', 'CorrectAns': 'f'},
      {'ImageFile': 'stimuli/F19NE.jpg', 'Gender': 'Female', 'Emotion': 'Neutral', 'CorrectAns': 'f'},
      {'ImageFile': 'stimuli/F20AN.jpg', 'Gender': 'Female', 'Emotion': 'Angry', 'CorrectAns': 'f'}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
    Routine trial
  LoopTerminator trials
